OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8" => #1
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Index
Input stream 1=#1 -> Identity => #2
#2.Output stream 1 -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 13.0
  High Cut-off Frequency (Hz) = 30.0
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Spatial Filter => #8
  Spatial Filter Coefficients = 1;1;1;1;1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 8
  Filter matrix file =
Data=#8 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 0.1
  Vertical Scale = 1
  Vertical Offset = 0
  Time Scale = 60
  Bottom ruler = true
  Left ruler = true
  Multiview = false

Crop
  Crop method = Min
  Min crop value = -1
  Max crop value = 1
