OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Index
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 13.0
  High Cut-off Frequency (Hz) = 30.0
  Band Pass Ripple (dB) = 0.5
-> Spatial Filter
  Spatial Filter Coefficients = 1;1;1;1;1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 8
  Filter matrix file =
-> Simple DSP
  Equation = x*x
-> Signal average => #5
Data=#5 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Keyboard stimulator => #7
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Input stream=#5, Stimulations stream=#7 -> CSV File Writer
  Filename = C:/Users/felixmaldonado/OneDrive - Drexel University/focus-tracker/data/record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
